PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  color = $[1.000,1.000,1.000]
  expName = basicattempt
  exportHTML = on Save
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Routines
  Routine trial
    ImageComponent imageP1
      image [set every repeat] = $P1Loc
      pos = (-400, 0)
      size = (300, 300)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      units = pix
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    ImageComponent imageP2
      image [set every repeat] = $P2Loc
      pos = (400, 0)
      size = (300, 300)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      units = pix
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    KeyboardComponent key_resp
      allowedKeys = 'q','left','right'
      correctAns = $CorrectAns
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      store = first key
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    CodeComponent Feedb
      Code Type = Auto->JS
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      Begin Experiment:
        # Message that will be updated with specific feedback
        msg = 'Feedback msg after trial'

        # Counter for the trials
        ntrial = 0
        trialReal = []

        # Coding the feedback message - add to output file
        acc_real = []
        acc_feedback = []

        # Counter for hits per block for feedback and real accuracy
        hits_per_block = 0
        hits_per_block_real = 0

        # Counter for the bonus
        bonus_accuracies = []
      Begin Routine:
        # Counter for which trial we are in right now
        ntrial += 1
        trialReal = ntrial
        thisExp.addData('trialNumber', trialReal)
        #mainStart = core.monotonicClock.getTime()
      End Routine:
        # Catching response and calculating value; > 0 means correct

        if key_resp.keys == 'left':
            valueDiff = ValueP1 - ValueP2
            thisExp.addData('item_chosen_name', P1name)
            thisExp.addData('item_chosen_value', ValueP1)
            thisExp.addData('item_chosen_ID', P1id)
        elif key_resp.keys == 'right':
            valueDiff = ValueP2 - ValueP1
            thisExp.addData('item_chosen_name', P2name)
            thisExp.addData('item_chosen_value', ValueP2)
            thisExp.addData('item_chosen_ID', P2id)
        elif key_resp.keys == None:
            valueDiff = None
            thisExp.addData('item_chosen_name', None)
            thisExp.addData('item_chosen_value', None)
            thisExp.addData('item_chosen_ID', None)

        # Calculating if items are neighbors or not

        value_dist = ValueP1 - ValueP2
        value_dist_abs = abs(value_dist)

        # Loop for giving accurate feedback after every trial

        if InverseFb == 0:

            # Participant doesn't respond on time
            if key_resp.keys is None:
                msg = 'TRY TO RESPOND FASTER'
                acc_feedback = 2
            # Participant responds correctly and items are neighbors
            elif valueDiff > 0 and value_dist_abs == 1:
                msg = 'GREAT!'
                acc_feedback = 1
                hits_per_block = hits_per_block + 1

            # P responds incorrectly
            elif valueDiff < 0 and value_dist_abs == 1:
                msg = 'INCORRECT!'
                acc_feedback = 0

            # Items are not neighbors
            elif value_dist_abs > 1:
                msg = 'THANK YOU'
                acc_feedback = 3


        # Loop for providing inverse feedback

        if InverseFb == 1:
            if key_resp.keys is None:
                msg = 'TRY TO RESPOND FASTER'
                acc_feedback = 2
            # Participant reponded incorrectly but we say the reverse
            elif valueDiff < 0 and value_dist_abs == 1:
                msg = 'GREAT!'
                acc_feedback = 1
                hits_per_block = hits_per_block + 1

            # P responded correctly but we say the reverse
            elif valueDiff > 0 and value_dist_abs == 1:
                msg = 'INCORRECT!'
                acc_feedback = 0

            elif value_dist_abs > 1:
                msg = 'THANK YOU'
                acc_feedback = 3

        # Loop for saving the real feedback and hits
        if valueDiff is None:
            acc_real = 2
        elif valueDiff > 0:
            acc_real = 1
            hits_per_block_real = hits_per_block_real + 1
        elif valueDiff < 0:
            acc_real = 0

        # Add acc from this trial to an array for later
        bonus_accuracies.append(acc_real)

        # Add data to output file
        thisExp.addData('diff_chosen_minus_reject', valueDiff)
        thisExp.addData('acc_real', acc_real)
        thisExp.addData('acc_feedback', acc_feedback)
    PolygonComponent cross_objects
      fillColor = $[-1.000,-1.000,-1.000]
      saveStartStop = False
      shape = cross
      size = (20, 20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      units = pix
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  Routine fixation_2
    PolygonComponent fixcross
      fillColor = $[-1.000,-1.000,-1.000]
      shape = cross
      size = (20, 20)
      startVal [frame N] = 0
      stopVal [duration (frames)] = $jitter
      units = pix
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    CodeComponent fixcross_prac_duration
      Code Type = Both
      Begin JS Routine:
        fixTiming = Math.floor(Math.random() * (60 - 0) ) + 0;
        jitter = (30 + fixTiming);
        routineStart = globalClock.getTime();
      Begin Routine:
        # Jitter the timing of fixation cross 0.5 to 1.5 seconds

        jitter = 30 + randint(0, 60)
      End JS Routine:
        psychoJS.experiment.addData('fix_onset', routineStart + fixcross.tStart);
  Routine feedback
    TextComponent Feedback
      color = black
      font = Calibri
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $msg
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    CodeComponent OnsetFeedbMain
      Code Type = Auto->JS
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  Routine BlockFeedback
    CodeComponent fbBlock
      Code Type = Auto->JS
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      Begin Experiment:
        # Message will be updated every block
        msgBlock = 'fb after Block'
      Begin Routine:
        # Calculating accuracy in the block
        previous_block_acc = float(hits_per_block_real)/ntrial

        # Force end of loop if subjects fail AC - change thisBlock to 4
        check_AC_acc = hits_in_attention2/4
        if thisBlock == 4 and check_AC_acc < 0.50:
            repBlocks.finished = True
            msgBlock = 'Your accuracy in the attention checks was too low. You\'ve reached the end of the experiment'
            continueRoutine = False
            repsRating = 0
        else:
            continueRoutine = True
            repsRating = 1

        # Ask Juan if this is even correct
        # Present message depending on percentage of correct answers
        if previous_block_acc >= 0.80:
            msgBlock = 'Well done in the block but you can do it better! Remember, the number of correct trials will determine the chance to get the bonus payment.'
        elif previous_block_acc < 0.80 and previous_block_acc >= 0.60:
            msgBlock = 'Your accuracy in the block was very good, but you can improve it! Remember, the number of correct trials will determine the chance to get the bonus payment.'
        elif previous_block_acc < 0.60 and previous_block_acc >= 0.50:
            msgBlock = 'Your accuracy in the block was good, but you can improve it! Remember, the number of correct trials will determine the chance to get the bonus payment.'
        elif previous_block_acc <= 0.50:
            msgBlock = 'Your accuracy in the block was a bit low. Please try to pay more attention. Remember, the number of correct trials will determine the chance to get the bonus payment.'
    TextComponent feedbBlocks
      color = black
      font = Calibri
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      text [set every repeat] = $msgBlock
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    KeyboardComponent keynextBlock
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine LoopControl_2
    CodeComponent LoopContr
      Code Type = Auto->JS
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      Begin Experiment:
        # Counter for the blocks
        thisBlock = 0

        # Message shown before each block, to be updated
        msgBlockNumber = 'which block we say we starting'
      Begin Routine:
        # First time we enter the loop, we are in block 1
        thisBlock +=1

        # 76, but Python counts from 0, so 77 trials per block
        #startItem = (thisBlock-1)*76 + (thisBlock - 1)
        #endItem = thisBlock*76 + (thisBlock - 1)
        # A slice between two specific rows - trials for the block
        #myIndices = slice(startItem, endItem+1)
        if thisBlock == 1:
            myIndices = "0:77"
        elif thisBlock == 2:
            myIndices = "77:154"
        elif thisBlock == 3:
            myIndices = "154:231"
        elif thisBlock == 4:
            myIndices = "231:308"
        elif thisBlock == 5:
            myIndices = "308:385"
        elif thisBlock == 6:
            myIndices = "385:462"
        elif thisBlock == 7:
            myIndices = "462:539"
        elif thisBlock == 8:
            myIndices = "539:617"
        # Update message before every new block
        msgBlockNumber = 'You will start block ' + str(thisBlock) + ' out of 8. Remember that both accuracy and how fast you are matter. [Press space bar to begin.]'

        # Adter block 4 we do the attention checks
        if thisBlock == 4:
            repsAC = 1
        else:
            repsAC = 0
    TextComponent beginBlock
      color = black
      font = Calibri
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msgBlockNumber
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    KeyboardComponent key_respStart
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructions
    ImageComponent instr1
      image [set every repeat] = $Slides
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent keyNext
      allowedKeys = 'space', 'left', 'right'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent codeJScomponent
      Code Type = Auto->JS
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  Routine practice
    ImageComponent practiceP1
      image [set every repeat] = $LocItem1
      pos = (-400, 0)
      size = (300, 300)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      units = pix
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    ImageComponent practiceP2
      image [set every repeat] = $LocItem2
      pos = (400, 0)
      saveStartStop = False
      size = (300, 300)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      units = pix
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    KeyboardComponent practiceKey
      allowedKeys = 'q','left','right'
      correctAns = $CorrKey
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      store = first key
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    CodeComponent practiceFeedb
      Code Type = Both
      Begin Experiment:
        # Feedback message
        msgPractice = 'Feedback msg after practice trial'

        # Acc_practice to save code for accuracy
        acc_practice = []
        prac_trial = 0
        tprac = []
      Begin JS Experiment:
        msgPractice = "Feedback msg after practice trial";
        acc_practice = [];
        prac_trial = 0;
        tprac = [];
      Begin JS Routine:
        prac_trial += 1;
        tprac = prac_trial;
        psychoJS.experiment.addData("tprac", tprac);
        routinePracStart = globalClock.getTime();
      Begin Routine:
        # Update trial number and add it to outputfile
        prac_trial += 1
        tprac = prac_trial
        thisExp.addData('tprac', tprac)
        #pracStart = core.monotonicClock.getTime()
      End JS Routine:
        // Catching response and calculating value; > 0 means correct
        if ((practiceKey.keys === "left")) {
            valueDiff = (P1 - P2);
            psychoJS.experiment.addData("pracitem_chosen_name", NameItem1);
        }
        if ((practiceKey.keys === "right")) {
            valueDiff = (P2 - P1);
            psychoJS.experiment.addData("pracitem_chosen_name", NameItem2);
        }
        if ((practiceKey.keys === undefined)) {
            valueDiff = null;
            psychoJS.experiment.addData("practiceKey.keys", NaN);
            psychoJS.experiment.addData("practiceKey.rt", NaN);
            psychoJS.experiment.addData("pracitem_chosen_name", "No_response");
        }
        // Calculating if items are neighbors or not
        value_dist = (P1 - P2);
        value_dist_abs = Math.abs(value_dist);

        // Loop for giving accurate feedback after every trial
        if ((practiceKey.keys === undefined)) {
            msgPractice = "TRY TO RESPOND FASTER";
        } else {
            if (((valueDiff > 0) && (value_dist_abs === 1))) {
                msgPractice = "GREAT!";
            } else {
                if (((valueDiff < 0) && (value_dist_abs === 1))) {
                    msgPractice = "INCORRECT!";
                } else {
                    if ((value_dist_abs > 1)) {
                        msgPractice = "THANK YOU";
                    }
                }
            }
        }

        // Loop for saving the real feedback and hits
        if ((valueDiff === null)) {
            acc_practice = 2;
        } else {
            if ((valueDiff > 0)) {
                acc_practice = 1;
            } else {
                if ((valueDiff < 0)) {
                    acc_practice = 0;
                }
            }
        }
        psychoJS.experiment.addData("acc_practice", acc_practice);
        psychoJS.experiment.addData('P1_onsetPrac', routinePracStart + practiceP1.tStart);
        psychoJS.experiment.addData('P2_onsetPrac', routinePracStart + practiceP2.tStart);
        //psychoJS.experiment.addData('P1_start', practiceP1.tStart);
        //psychoJS.experiment.addData('P2_start', practiceP2.tStart);
      End Routine:
        # Catching response and calculating value; > 0 means correct

        if practiceKey.keys == 'left':
            valueDiff = P1 - P2
        if practiceKey.keys == 'right':
            valueDiff = P2 - P1
        if practiceKey.keys is None:
            valueDiff = None

        # Calculating if items are neighbors or not

        value_dist = P1 - P2
        value_dist_abs = abs(value_dist)

        # Loop for giving accurate feedback after every trial
        # Participant doesn't respond on time
        if practiceKey.keys is None:
            msgPractice = 'TRY TO RESPOND FASTER'

        # Participant responds correctly and items are neighbors
        elif valueDiff > 0 and value_dist_abs == 1:
            msgPractice = 'GREAT!'

        # P responds incorrectly
        elif valueDiff < 0 and value_dist_abs == 1:
            msgPractice = 'INCORRECT!'

        # Items are not neighbors
        elif value_dist_abs > 1:
            msgPractice = 'THANK YOU'

        # Loop for saving the real feedback and hits
        if valueDiff is None:
            acc_practice = 2
        elif valueDiff > 0:
            acc_practice = 1
        elif valueDiff < 0:
            acc_practice = 0

        thisExp.addData('acc_practice', acc_practice)
    PolygonComponent crossPractice
      fillColor = $[-1,-1,-1]
      saveStartStop = False
      shape = cross
      size = (20, 20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      units = pix
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  Routine bonus
    CodeComponent bonusCode
      Code Type = Both
      Begin Experiment:
        msgBonus = 'Feedback msg to say if participant gets bonus'
        get_bonus = []
      Begin JS Experiment:
        msgBonus = "Feedback msg to say if participant gets bonus";
        get_bonus = [];
      Begin JS Routine:
        function getRandomSubarray(arr, size) {
            var shuffled = arr.slice(0), i = arr.length, temp, index;
            while (i--) {
                index = Math.floor((i + 1) * Math.random());
                temp = shuffled[index];
                shuffled[index] = shuffled[i];
                shuffled[i] = temp;
            }
            return shuffled.slice(0, size);
        }

        var sampled_accuracies = getRandomSubarray(bonus_accuracies, 3);
        var countBonuses = 0;
        for(var i = 0; i < sampled_accuracies.length; ++i){
            if(sampled_accuracies[i] == 1)
                countBonuses++;
        }

        if (countBonuses > 1) {
            msgBonus = "CONGRATULATIONS! The randomly picked responses were correct. You will receive the BONUS!";
            get_bonus = 1;
            psychoJS.experiment.addData("Bonus", get_bonus);
        } else {
            msgBonus = "Sorry! Unfortunately, the randomly picked responses were not correct. You cannot not receive the bonus";
        }
      Begin Routine:
        # Pick three random number from the accuracy counter
        sampled_accuracies = random.sample(bonus_accuracies, 3)

        # Display bonus message
        if sampled_accuracies.count(1) > 1:
            msgBonus = 'CONGRATULATIONS! The randomly picked responses were correct. You will receive the BONUS!'
            get_bonus = 1
            thisExp.addData('Bonus', get_bonus)
        else:
            msgBonus = 'Sorry! Unfortunately, the randomly picked responses were not correct. You cannot not receive the bonus'
    KeyboardComponent key_resp2
      allowedKeys = 'space','left', 'right'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent presentBonus
      color = black
      font = Calibri
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $msgBonus
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  Routine PracFeedb_2
    TextComponent practiceFeedback
      color = black
      font = Calibri
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $msgPractice
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    CodeComponent onsetFeedbackCode
      Code Type = Auto->JS
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  Routine practiceBlocks
    CodeComponent codePracStart
      Code Type = Auto->JS
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      Begin Experiment:
        # Counter for the practice blocks
        practiceBlock = 0

        # Message to be updated before every block
        msgStartPractice = 'message shown before a practice Block'
      Begin Routine:
        # First time we enter the loop, we are in block 1

        practiceBlock +=1

        # 16 items in each block, so write 15
        #startItem = (practiceBlock-1)*15 + (practiceBlock - 1)
        #endItem = practiceBlock*15 + (practiceBlock - 1)

        # a slice between two specific rows - trials for the block
        #myIndices = "startItem:endItem"
        #myIndices = (startItem, endItem+1)

        # Update message before blocks
        # change to 0:16 and 16:33
        if practiceBlock == 1:
            myIndices = "0:16"
            msgStartPractice = 'Let\'s start practicing this task.\n Don\'t worry about making mistakes, just try to understand the goal for this task.\n [Press space bar to continue]'
        else:
            myIndices = "16:33"
            msgStartPractice = 'This is the second practice block. \n Again, relax and try to get familiar with the task and the timing, don\'t worry about mistakes.\n [Press space bar to start]'
    KeyboardComponent key_startPrac
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent practiceMessage
      color = black
      font = Calibri
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msgStartPractice
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  Routine finishExperiment
    TextComponent finalText
      color = black
      font = Calibri
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Thank you very much for taking part in the experiment! Don't forget to copy your completion link. Press Esc to exit experiment.
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    KeyboardComponent key_respEnd
      allowedKeys = 'y','n','left','right','space', 'Escape'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine attentionCheck
    KeyboardComponent key_respAC
      allowedKeys = 'up','down','left','right'
      correctAns = $CorrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      store = first key
      storeCorrect = True
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    CodeComponent run_check
      Code Type = Auto->JS
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      Begin Experiment:
        AC_acc = []
        hits_in_attention2 = 0
        abortMsg = ''
      End Routine:
        if key_respAC.corr == True:
            AC_acc = 1
            hits_in_attention2 += 1
        else:
            AC_acc = 0

        thisExp.addData('AC_acc', AC_acc)
    ImageComponent ac_stim
      image [set every repeat] = $Stim
      size = (200, 200)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = pix
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    TextComponent Pos1
      color = black
      font = Calibri
      letterHeight = 0.07
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $Loc1
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    TextComponent Pos2
      color = black
      font = Calibri
      letterHeight = 0.07
      pos = (0.35, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $Loc2
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    TextComponent Pos3
      color = black
      font = Calibri
      letterHeight = 0.07
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text [set every repeat] = $Loc3
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    TextComponent Pos4
      color = black
      font = Calibri
      letterHeight = 0.07
      pos = (-0.35, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text [set every repeat] = $Loc4
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    TextComponent shapeInstructions
      color = black
      font = Calibri
      letterHeight = 0.06
      pos = (0, 0.40)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Use arrows to choose the shape's name
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  Routine attentionCheckPrac
    KeyboardComponent key_respAC_prac
      allowedKeys = 'up','down','left','right'
      correctAns = $CorrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      store = first key
      storeCorrect = True
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    CodeComponent run_check_prac
      Code Type = Auto->JS
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      Begin Experiment:
        # List storing the accuracy as 1 or 0
        AC_acc = []
        hits_in_attention = 0
        abortMsg = ''
      End Routine:
        # Add accuracy to output file
        if key_respAC_prac.corr:
            AC_acc = 1
            hits_in_attention += 1
        else:
            AC_acc = 0

        thisExp.addData('AC_acc', AC_acc)
    ImageComponent ac_stim_prac
      image [set every repeat] = $Stim
      size = (200, 200)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = pix
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    TextComponent Pos1_prac
      color = black
      font = Calibri
      letterHeight = 0.07
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $Loc1
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    TextComponent Pos2_prac
      color = black
      font = Calibri
      letterHeight = 0.07
      pos = (0.35, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $Loc2
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    TextComponent Pos3_prac
      color = black
      font = Calibri
      letterHeight = 0.07
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $Loc3
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    TextComponent Pos4_prac
      color = black
      font = Calibri
      letterHeight = 0.07
      pos = (-0.35, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $Loc4
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    TextComponent taskAC_prac
      color = black
      font = Calibri
      letterHeight = 0.06
      pos = (0, 0.40)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Use arrows to choose the shape's name
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  Routine ContinueOrEnd
    CodeComponent AccuracyCheck
      Code Type = Auto->JS
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      Begin Experiment:
        blockRepetitions = 0
      Begin Routine:
        #Calculate accuracy in AC and end experiment if acc belor 50%
        check_AC_acc = float(hits_in_attention)/8.0

        if check_AC_acc < 0.50:
            # Skip whole real task
            blockRepetitions = 0
            repsRating = 0
            repsBonus = 0
            abortMsg = 'Your accuracy in the attention checks is too low. You have reached the end of the experiment.'
        else:
            # Next line tells how many real blocks
            blockRepetitions = 8
            repsRating = 1
            repsBonus = 1
            abortMsg = 'You passed the attention checks. You are about to start the real task. Here, both your accuracy and reaction time matter. [ Press space bar to start ]'
    TextComponent messageChecks
      color = black
      font = Calibri
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $abortMsg
    KeyboardComponent key_endFail
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine freeResponse
    TextComponent text
      color = black
      font = Calibri
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent typingText
      Code Type = Auto->JS
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      Begin Routine:
        # Code in this part is from https://gitlab.pavlovia.org/demos/textinput/
        text.text = ''
        modify = False
        event.clearEvents('keyboard')
      End Routine:
        thisExp.addData("comments", subjectText.text)
    TextComponent ask_for_feedb
      color = black
      font = Calibri
      letterHeight = 0.06
      pos = (0, 0.40)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Here you can give us feedback. [Press return to go to our last message]
  Routine rateItems
    ImageComponent item_to_rate
      image [set every repeat] = $Location
      saveStartStop = False
      size = (300, 300)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent keyNext_2
      allowedKeys = '1','2','3','4','5','6','7','8'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent ratingInstr
      color = black
      font = Calibri
      letterHeight = 0.06
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text = Please order the objects according to their position (1 is the worst and 8 is the best). Type a number for every picture.
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  Routine fixation_main
    PolygonComponent fixcross_2
      fillColor = $[-1.000,-1.000,-1.000]
      shape = cross
      size = (20, 20)
      startVal [frame N] = 0
      stopVal [duration (frames)] = $jitter
      units = pix
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        # Jitter the timing of fixation cross 0.5 to 1.5 seconds

        jitter = 30 + randint(0, 60)
Flow
  LoopInitiator instructionsLoop loopType="TrialHandler"
    conditionsFile = conditions_instruction.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Slides', 'html/resources/decisiontask/Slide01.jpg')]),
      OrderedDict([('Slides', 'html/resources/decisiontask/Slide02.jpg')]),
      OrderedDict([('Slides', 'html/resources/decisiontask/Slide03.jpg')]),
      OrderedDict([('Slides', 'html/resources/decisiontask/Slide04.jpg')]),
      OrderedDict([('Slides', 'html/resources/decisiontask/Slide05.jpg')]),
      OrderedDict([('Slides', 'html/resources/decisiontask/Slide06.jpg')]),
      OrderedDict([('Slides', 'html/resources/decisiontask/Slide07.jpg')]),
      OrderedDict([('Slides', 'html/resources/decisiontask/Slide08.jpg')]),
      OrderedDict([('Slides', 'html/resources/decisiontask/Slide09.jpg')]),
      OrderedDict([('Slides', 'html/resources/decisiontask/Slide10.jpg')]),
      OrderedDict([('Slides', 'html/resources/decisiontask/Slide11.jpg')]),
      OrderedDict([('Slides', 'html/resources/decisiontask/Slide12.jpg')]),
      OrderedDict([('Slides', 'html/resources/decisiontask/Slide13.jpg')])]
    Routine instructions
  LoopTerminator instructionsLoop
  LoopInitiator repPractice loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 2
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    Routine practiceBlocks
    LoopInitiator practiceTrials loopType="TrialHandler"
      Selected rows = $myIndices
      conditionsFile = html\resources\conditions_practice.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('P1', 2), ('P2', 5), ('Block', 1), ('LocItem1', '/resources/stimuli_practice_decision/04_beetle.jpg'), ('LocItem2', '/resources/stimuli_practice_decision/02_canary.jpg'), ('NameItem1', 'beetle'), ('NameItem2', 'canary')]),
        OrderedDict([('P1', 4), ('P2', 3), ('Block', 1), ('LocItem1', '/resources/stimuli_practice_decision/01_rabbit.jpg'), ('LocItem2', '/resources/stimuli_practice_decision/07_sock.jpg'), ('NameItem1', 'rabbit'), ('NameItem2', 'sock')]),
        OrderedDict([('P1', 6), ('P2', 2), ('Block', 1), ('LocItem1', '/resources/stimuli_practice_decision/06_pullover.jpg'), ('LocItem2', '/resources/stimuli_practice_decision/04_beetle.jpg'), ('NameItem1', 'pullover'), ('NameItem2', 'beetle')]),
        OrderedDict([('P1', 7), ('P2', 1), ('Block', 1), ('LocItem1', '/resources/stimuli_practice_decision/05_glasses.jpg'), ('LocItem2', '/resources/stimuli_practice_decision/08_handmixer.jpg'), ('NameItem1', 'glasses'), ('NameItem2', 'handmixer')]),
        OrderedDict([('P1', 7), ('P2', 6), ('Block', 1), ('LocItem1', '/resources/stimuli_practice_decision/05_glasses.jpg'), ('LocItem2', '/resources/stimuli_practice_decision/06_pullover.jpg'), ('NameItem1', 'glasses'), ('NameItem2', 'pullover')]),
        OrderedDict([('P1', 4), ('P2', 7), ('Block', 1), ('LocItem1', '/resources/stimuli_practice_decision/01_rabbit.jpg'), ('LocItem2', '/resources/stimuli_practice_decision/05_glasses.jpg'), ('NameItem1', 'rabbit'), ('NameItem2', 'glasses')])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
      Routine fixation_2
      Routine practice
      Routine PracFeedb_2
    LoopTerminator practiceTrials
    LoopInitiator Attentions loopType="TrialHandler"
      Selected rows = 0:4
      conditionsFile = html\resources\attentionChecks.xlsx
      loopType = fullRandom
      nReps = 1
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      conditions:
        [OrderedDict([('Stim', 'html/resources/sequences_IDs/circle.png'), ('Loc1', 'circle ↑'), ('Loc2', 'square →'), ('Loc3', 'triangle ↓'), ('Loc4', '← star '), ('CorrAns', 'up')]),
        OrderedDict([('Stim', 'html/resources/sequences_IDs/star.png'), ('Loc1', 'square ↑'), ('Loc2', 'circle →'), ('Loc3', 'star ↓'), ('Loc4', '← triangle'), ('CorrAns', 'down')]),
        OrderedDict([('Stim', 'html/resources/sequences_IDs/square1.png'), ('Loc1', 'star ↑'), ('Loc2', 'triangle →'), ('Loc3', 'circle ↓'), ('Loc4', '← square'), ('CorrAns', 'left')]),
        OrderedDict([('Stim', 'html/resources/sequences_IDs/triangle.png'), ('Loc1', 'star ↑'), ('Loc2', 'square →'), ('Loc3', 'triangle ↓'), ('Loc4', '← circle'), ('CorrAns', 'down')]),
        OrderedDict([('Stim', 'html/resources/sequences_IDs/circle.png'), ('Loc1', 'triangle ↑'), ('Loc2', 'circle →'), ('Loc3', 'star ↓'), ('Loc4', '← square'), ('CorrAns', 'right')]),
        OrderedDict([('Stim', 'html/resources/sequences_IDs/star.png'), ('Loc1', 'triangle ↑'), ('Loc2', 'star →'), ('Loc3', 'square ↓'), ('Loc4', '← circle'), ('CorrAns', 'left')]),
        OrderedDict([('Stim', 'html/resources/sequences_IDs/square1.png'), ('Loc1', 'square ↑'), ('Loc2', 'star →'), ('Loc3', 'circle ↓'), ('Loc4', '← triangle '), ('CorrAns', 'up')]),
        OrderedDict([('Stim', 'html/resources/sequences_IDs/triangle.png'), ('Loc1', 'circle ↑'), ('Loc2', 'triangle →'), ('Loc3', 'square ↓'), ('Loc4', '← star '), ('CorrAns', 'right')])]
      Routine attentionCheckPrac
    LoopTerminator Attentions
  LoopTerminator repPractice
  Routine ContinueOrEnd
  LoopInitiator repBlocks loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = blockRepetitions
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    Routine LoopControl_2
    LoopInitiator trials loopType="TrialHandler"
      Selected rows = $myIndices
      conditionsFile = $'conditions_main' + expInfo['participant'] + '.xlsx'
      loopType = sequential
      nReps = 1
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      Routine fixation_main
      Routine trial
      Routine feedback
    LoopTerminator trials
    LoopInitiator trials_AC loopType="TrialHandler"
      conditionsFile = html\resources\attentionChecks.xlsx
      loopType = fullRandom
      nReps = repsAC
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      conditions:
        [OrderedDict([('Stim', 'html/resources/sequences_IDs/circle.png'), ('Loc1', 'circle ↑'), ('Loc2', 'square →'), ('Loc3', 'triangle ↓'), ('Loc4', '← star '), ('CorrAns', 'up')]),
        OrderedDict([('Stim', 'html/resources/sequences_IDs/star.png'), ('Loc1', 'square ↑'), ('Loc2', 'circle →'), ('Loc3', 'star ↓'), ('Loc4', '← triangle'), ('CorrAns', 'down')]),
        OrderedDict([('Stim', 'html/resources/sequences_IDs/square1.png'), ('Loc1', 'star ↑'), ('Loc2', 'triangle →'), ('Loc3', 'circle ↓'), ('Loc4', '← square'), ('CorrAns', 'left')]),
        OrderedDict([('Stim', 'html/resources/sequences_IDs/triangle.png'), ('Loc1', 'star ↑'), ('Loc2', 'square →'), ('Loc3', 'triangle ↓'), ('Loc4', '← circle'), ('CorrAns', 'down')]),
        OrderedDict([('Stim', 'html/resources/sequences_IDs/circle.png'), ('Loc1', 'triangle ↑'), ('Loc2', 'circle →'), ('Loc3', 'star ↓'), ('Loc4', '← square'), ('CorrAns', 'right')]),
        OrderedDict([('Stim', 'html/resources/sequences_IDs/star.png'), ('Loc1', 'triangle ↑'), ('Loc2', 'star →'), ('Loc3', 'square ↓'), ('Loc4', '← circle'), ('CorrAns', 'left')]),
        OrderedDict([('Stim', 'html/resources/sequences_IDs/square1.png'), ('Loc1', 'square ↑'), ('Loc2', 'star →'), ('Loc3', 'circle ↓'), ('Loc4', '← triangle '), ('CorrAns', 'up')]),
        OrderedDict([('Stim', 'html/resources/sequences_IDs/triangle.png'), ('Loc1', 'circle ↑'), ('Loc2', 'triangle →'), ('Loc3', 'square ↓'), ('Loc4', '← star '), ('CorrAns', 'right')])]
      Routine attentionCheck
    LoopTerminator trials_AC
    Routine BlockFeedback
  LoopTerminator repBlocks
  LoopInitiator repeatRating loopType="TrialHandler"
    conditionsFile = html\resources\stim_info1.xlsx
    isTrials = False
    loopType = fullRandom
    nReps = repsRating
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    Routine rateItems
  LoopTerminator repeatRating
  LoopInitiator BonusLoop loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = repsBonus
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    Routine bonus
  LoopTerminator BonusLoop
  Routine freeResponse
  Routine finishExperiment
