PsychoPy2experiment version="2020.1.3"
Settings
  Completed URL = https://app.prolific.co/submissions/complete?cc=17CBD1FA
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  color = $[1.000,1.000,1.000]
  expName = Retriever
  exportHTML = on Save
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Routines
  Routine trial
    ImageComponent imageP1
      image [set every repeat] = $P1Loc
      pos = (-250, 0)
      size = (200, 200)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.5
      units = pix
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    ImageComponent imageP2
      image [set every repeat] = $P2Loc
      pos = (250, 0)
      size = (200, 200)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.5
      units = pix
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = $CorrectAns
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.5
      store = first key
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    CodeComponent Feedb
      Code Type = Both
      Begin Experiment:
        # Message that will be updated with specific feedback
        msg = 'Feedback msg after trial'

        # Counter for the trials
        ntrial = 0
        trialReal = []

        # Coding the feedback message - add to output file
        acc_real = []
        acc_feedback = []

        # Counter for hits per block for feedback and real accuracy
        hits_per_block = 0
        hits_per_block_real = 0

        # Counter for the bonus
        bonus_accuracies = []
      Begin JS Experiment:
        msg = "Feedback msg after trial";
        // Counter for the trials
        ntrial = 0;
        trialReal = [];

        // Coding the feedback message - add to output file
        acc_real = [];
        acc_feedback = [];

        // Counter for hits per block for feedback and real accuracy
        hits_per_block = 0;
        hits_per_block_real = 0;
        bonus_accuracies = [];
      Begin JS Routine:
        ntrial += 1;
        trialReal = ntrial;
        psychoJS.experiment.addData("trialNumber", trialReal);
        routineMainStart = globalClock.getTime();
        crossDisappear_Main = 1;
      Begin Routine:
        # Counter for which trial we are in right now
        ntrial += 1
        trialReal = ntrial
        thisExp.addData('trialNumber', trialReal)
        #mainStart = core.monotonicClock.getTime()
      Each JS Frame:
        // Change opacity of fixation cross when key is pressed
        if ((key_resp.keys !== undefined)) {
            crossDisappear_Main = 0;
        }
      End JS Routine:
        // Catching response and calculating value; > 0 means correct
        if ((key_resp.keys === "left")) {
            valueDiff = (ValueP1 - ValueP2);
            psychoJS.experiment.addData("item_chosen_name", P1name);
            psychoJS.experiment.addData("item_chosen_value", ValueP1);
            psychoJS.experiment.addData("item_chosen_ID", P1id);
            psychoJS.experiment.addData("diff_chosen_minus_reject", valueDiff);
        } else {
            if ((key_resp.keys === "right")) {
                valueDiff = (ValueP2 - ValueP1);
                psychoJS.experiment.addData("item_chosen_name", P2name);
                psychoJS.experiment.addData("item_chosen_value", ValueP2);
                psychoJS.experiment.addData("item_chosen_ID", P2id);
                psychoJS.experiment.addData("diff_chosen_minus_reject", valueDiff);
            } else {
                if ((key_resp.keys === undefined)) {
                    valueDiff = undefined;
                    psychoJS.experiment.addData("item_chosen_name", 'No_response');
                    psychoJS.experiment.addData("item_chosen_value", NaN);
                    psychoJS.experiment.addData("item_chosen_ID", NaN);
                    psychoJS.experiment.addData("diff_chosen_minus_reject", NaN);
                    psychoJS.experiment.addData("key_resp.keys", NaN);
                    psychoJS.experiment.addData("key_resp.rt", NaN);
                }
            }
        }

        // Calculating if items are neighbors or not
        value_dist = (ValueP1 - ValueP2);
        value_dist_abs = Math.abs(value_dist);

        // Loop for giving accurate feedback after trial
        if ((InverseFb === 0)) {
            if ((key_resp.keys === undefined)) {
                msg = "TRY TO RESPOND FASTER";
                durationBlank = 0.5;
                acc_feedback = 2;
            } else {
                if (((valueDiff > 0) && (value_dist_abs === 1))) {
                    msg = "WIN!";
                    acc_feedback = 1;
                    durationBlank = 0.5;
                    hits_per_block = (hits_per_block + 1);
                } else {
                    if (((valueDiff < 0) && (value_dist_abs === 1))) {
                        msg = "LOSS!";
                        durationBlank = 0.5;
                        acc_feedback = 0;
                    } else {
                        if ((value_dist_abs > 1)) {
                            msg = "";
                            durationBlank = 0.0;
                            acc_feedback = 3;
                        }
                    }
                }
            }
        }

        // Loop for providing inverse feedback
        if ((InverseFb === 1)) {
            if ((key_resp.keys === undefined)) {
                msg = "TRY TO RESPOND FASTER";
                durationBlank = 0.5;
                acc_feedback = 2;
            } else {
                if (((valueDiff < 0) && (value_dist_abs === 1))) {
                    msg = "WIN!";
                    durationBlank = 0.5;
                    acc_feedback = 1;
                    hits_per_block = (hits_per_block + 1);
                } else {
                    if (((valueDiff > 0) && (value_dist_abs === 1))) {
                        msg = "LOSS!";
                        durationBlank = 0.5;
                        acc_feedback = 0;
                    } else {
                        if ((value_dist_abs > 1)) {
                            msg = " ";
                            durationBlank = 0.0;
                            acc_feedback = 3;
                        }
                    }
                }
            }
        }

        // saving the real feedback and hits
        if ((valueDiff === undefined)) {
            acc_real = 2;
        } else {
            if ((valueDiff > 0)) {
                acc_real = 1;
                hits_per_block_real = (hits_per_block_real + 1);
            } else {
                if ((valueDiff < 0)) {
                    acc_real = 0;
                }
            }
        }

        // Add accuracy from this trial to an array. Add data to output file
        bonus_accuracies.push(acc_real);
        psychoJS.experiment.addData("acc_real", acc_real);
        psychoJS.experiment.addData("acc_feedback", acc_feedback);
        psychoJS.experiment.addData('P1_onset', routineMainStart + imageP1.tStart);
        psychoJS.experiment.addData('P2_onset', routineMainStart + imageP2.tStart);
      End Routine:
        # Catching response and calculating value; > 0 means correct

        if key_resp.keys == 'left':
            valueDiff = ValueP1 - ValueP2
            thisExp.addData('item_chosen_name', P1name)
            thisExp.addData('item_chosen_value', ValueP1)
            thisExp.addData('item_chosen_ID', P1id)
        elif key_resp.keys == 'right':
            valueDiff = ValueP2 - ValueP1
            thisExp.addData('item_chosen_name', P2name)
            thisExp.addData('item_chosen_value', ValueP2)
            thisExp.addData('item_chosen_ID', P2id)
        elif key_resp.keys == None:
            valueDiff = None
            thisExp.addData('item_chosen_name', None)
            thisExp.addData('item_chosen_value', None)
            thisExp.addData('item_chosen_ID', None)

        # Calculating if items are neighbors or not

        value_dist = ValueP1 - ValueP2
        value_dist_abs = abs(value_dist)

        # Loop for giving accurate feedback after every trial

        if InverseFb == 0:

            # Participant doesn't respond on time
            if key_resp.keys is None:
                msg = 'TRY TO RESPOND FASTER'
                durationBlank = 0.5
                acc_feedback = 2
            # Participant responds correctly and items are neighbors
            elif valueDiff > 0 and value_dist_abs == 1:
                msg = 'WIN!'
                acc_feedback = 1
                durationBlank = 0.5
                hits_per_block = hits_per_block + 1

            # P responds incorrectly
            elif valueDiff < 0 and value_dist_abs == 1:
                msg = 'LOSS!'
                durationBlank = 0.5
                acc_feedback = 0

            # Items are not neighbors
            elif value_dist_abs > 1:
                msg = ''
                durationBlank = 0.0
                acc_feedback = 3


        # Loop for providing inverse feedback

        if InverseFb == 1:
            if key_resp.keys is None:
                msg = 'TRY TO RESPOND FASTER'
                durationBlank = 0.5
                acc_feedback = 2
            # Participant reponded incorrectly but we say the reverse
            elif valueDiff < 0 and value_dist_abs == 1:
                msg = 'WIN!'
                durationBlank = 0.5
                acc_feedback = 1
                hits_per_block = hits_per_block + 1

            # P responded correctly but we say the reverse
            elif valueDiff > 0 and value_dist_abs == 1:
                msg = 'LOSS!'
                durationBlank = 0.5
                acc_feedback = 0

            elif value_dist_abs > 1:
                msg = ' '
                durationBlank = 0.0
                acc_feedback = 3

        # Loop for saving the real feedback and hits
        if valueDiff is None:
            acc_real = 2
        elif valueDiff > 0:
            acc_real = 1
            hits_per_block_real = hits_per_block_real + 1
        elif valueDiff < 0:
            acc_real = 0

        # Add acc from this trial to an array for later
        bonus_accuracies.append(acc_real)

        # Add data to output file
        thisExp.addData('diff_chosen_minus_reject', valueDiff)
        thisExp.addData('acc_real', acc_real)
        thisExp.addData('acc_feedback', acc_feedback)
    PolygonComponent cross_objects
      fillColor = $[-1.000,-1.000,-1.000]
      opacity [set every frame] = crossDisappear_Main
      saveStartStop = False
      shape = cross
      size = (20, 20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      units = pix
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  Routine fixation_2
    PolygonComponent fixcross
      fillColor = $[-1.000,-1.000,-1.000]
      shape = cross
      size = (20, 20)
      startVal [frame N] = 0
      stopVal [duration (frames)] = $jitter
      units = pix
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    CodeComponent fixcross_prac_duration
      Code Type = Both
      Begin JS Routine:
        // Jitter the timing of the fix cross in practice
        fixTiming = Math.random(0, 0.5);
        jitter = (0.5 + fixTiming);
        routineStart = globalClock.getTime();
      Begin Routine:
        # Jitter the timing of fixation cross 0.5 to 1.5 seconds

        jitter = 30 + randint(0, 60)
      End JS Routine:
        // Store onset of the fix cross in practice to the output file
        psychoJS.experiment.addData('fix_onset', routineStart + fixcross.tStart);
  Routine feedback
    TextComponent Feedback
      color = black
      font = Sans Serif
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $msg
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    CodeComponent OnsetFeedbMain
      Code Type = Both
      Begin JS Routine:
        // Store time when the feedback routine is starting
        startFeedbMain = globalClock.getTime();
      End JS Routine:
        // Add onset of feedback message to output file
        psychoJS.experiment.addData('feedb_onset', startFeedbMain + Feedback.tStart);
    TextComponent blankScreen2
      font = Calibri
      letterHeight = 0.1
      startVal [time (s)] = 0.6
      stopVal [duration (s)] = $durationBlank
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      text:
        Any text

        including line breaks
  Routine BlockFeedback
    CodeComponent fbBlock
      Code Type = Auto->JS
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      Begin Experiment:
        # Message will be updated every block
        msgBlock = 'fb after Block'
      Begin Routine:
        # Calculating accuracy in the block
        previous_block_acc = float(hits_per_block_real)/ntrial


        # Present message depending on percentage of correct answers
        if previous_block_acc >= 0.80:
            msgBlock = 'Amazing, your accuracy in the block was really high!\nRemember, the number of correct trials will determine the chance to get the bonus payment.'
        elif previous_block_acc < 0.80 and previous_block_acc >= 0.60:
            msgBlock = 'Your accuracy in the block was great! You are doing an excellent job!\nRemember, the number of correct trials will determine the chance to get the bonus payment.'
        elif previous_block_acc < 0.60 and previous_block_acc >= 0.50:
            msgBlock = 'Your accuracy in the block was good. However, there is still room for improvement!\nRemember, the number of correct trials will determine the chance to get the bonus payment.'
        elif previous_block_acc <= 0.50:
            msgBlock = 'Your accuracy in the block was a bit low. \nDon\'t give up! You will surely improve it.\nRemember, the number of correct trials will determine the chance to get the bonus payment.'
    TextComponent feedbBlocks
      color = black
      font = Sans Serif
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $msgBlock
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    KeyboardComponent keynextBlock
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine LoopControl_2
    CodeComponent LoopContr
      Code Type = Auto->JS
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      Begin Experiment:
        # Counter for the blocks
        thisBlock = 0
        numberACresults = 0
        # Message shown before each block, to be updated
        msgBlockNumber = 'which block we say we starting'

        main_task_blocks = (("condition_files/conditions_main_" + str(expInfo["participant"])) + ".xlsx")
      Begin Routine:
        # First time we enter the loop, we are in block 1
        thisBlock +=1

        # 76, but Python counts from 0, so 77 trials per block
        #startItem = (thisBlock-1)*76 + (thisBlock - 1)
        #endItem = thisBlock*76 + (thisBlock - 1)
        # A slice between two specific rows - trials for the block
        #myIndices = slice(startItem, endItem+1)
        if thisBlock == 1:
            MyIndicesMain = "0:77"
        elif thisBlock == 2:
            MyIndicesMain = "77:154"
        elif thisBlock == 3:
            MyIndicesMain = "154:231"
        elif thisBlock == 4:
            MyIndicesMain = "231:308"
        elif thisBlock == 5:
            MyIndicesMain = "308:385"
        elif thisBlock == 6:
            MyIndicesMain = "385:462"
        elif thisBlock == 7:
            MyIndicesMain = "462:539"
        elif thisBlock == 8:
            MyIndicesMain = "539:617"
        # Update message before every new block
        msgBlockNumber = 'You will start block ' + str(thisBlock) + ' out of 8. \nRemember that both accuracy and speed matter. \n[Press space bar to begin.]'

        # Adter block 4 we do the attention checks
        if thisBlock == 4:
            repsAC = 1
            numberACresults = 1
        else:
            repsAC = 0
            numberACresults = 0
    TextComponent beginBlock
      color = black
      font = Sans Serif
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msgBlockNumber
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    KeyboardComponent key_respStart
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructions
    ImageComponent instr1
      image [set every repeat] = $current_img
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent keyNext
      allowedKeys = 'left', 'right', 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent codeJScomponent
      Code Type = Auto->JS
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    CodeComponent imagesSlides
      Code Type = Both
      Begin Experiment:
        img_no = 1

        current_img = 'html/resources/instructions/Slide' + str(img_no) + '.jpg'
      Begin JS Experiment:
        // Start from picture no 1 and choose a new one to present once the experiment starts
        img_no = 1;
        current_img = (("html/resources/instructions/Slide" + img_no.toString()) + ".jpg");
      Begin JS Routine:
        // Update picture in the beginning of the loop
        current_img = (("html/resources/instructions/Slide" + img_no.toString()) + ".jpg");
      Begin Routine:
        current_img = 'html/resources/instructions/Slide' + str(img_no) + '.jpg'
      End JS Routine:
        // if the participant pressed the left key, decrease the image
        // number by one (e. g. going from "image 2" to "image 1"),
        // and if they pressed the right key, increase the image number
        // by one ("image 2" -> "image 3")

        if (((img_no > 1) && ((keyNext.keys === "left".toString()) || (keyNext.keys === "left")))) {
            img_no -= 1;
        } else {
            if (((img_no < 16) && ((keyNext.keys === "right".toString()) || (keyNext.keys === "right")))) {
                img_no += 1;
            } else {
                if (((img_no === 16) && ((keyNext.keys === "space") || (keyNext.keys === "space".toString())))) {
                    instructionsLoop.finished = true;
                    trials.finished = true;
                }
            }
        }
        current_img = (("html/resources/instructions/Slide" + img_no.toString()) + ".jpg");
      End Routine:
        # if the participant pressed the left key, decrease the image
        # number by one (e. g. going from "image 2" to "image 1"),
        # and if they pressed the right key, increase the image number
        # by one ("image 2" -> "image 3")
        if (img_no > 1) and ((keyNext.keys == str('left')) or (keyNext.keys == 'left')):
            img_no -= 1
        elif (img_no < 16) and ((keyNext.keys == str('right')) or (keyNext.keys == 'right')):
            img_no += 1
        elif (img_no == 16) and ((keyNext.keys == 'space') or (keyNext.keys == str('space'))):
            instructionsLoop.finished = True
            trials.finished = True
        current_img = 'html/resources/instructions/Slide' + str(img_no) + '.jpg'
  Routine practice
    ImageComponent practiceP1
      image [set every repeat] = $LocItem1
      pos = (-250, 0)
      size = (200, 200)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      units = pix
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    ImageComponent practiceP2
      image [set every repeat] = $LocItem2
      pos = (250, 0)
      saveStartStop = False
      size = (200, 200)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      units = pix
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    KeyboardComponent practiceKey
      allowedKeys = 'left','right'
      correctAns = $CorrKey
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      store = first key
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    CodeComponent practiceFeedb
      Code Type = Both
      Begin Experiment:
        # Feedback message
        msgPractice = 'Feedback msg after practice trial'

        # Acc_practice to save code for accuracy
        acc_practice = []
        prac_trial = 0
        tprac = []
        durationBlank = 0.0
      Begin JS Experiment:
        msgPractice = "Feedback msg after practice trial";
        acc_practice = [];
        prac_trial = 0;
        tprac = [];
        durationBlank = 0.0;
      Begin JS Routine:
        prac_trial += 1;
        tprac = prac_trial;
        psychoJS.experiment.addData("tprac", tprac);
        routinePracStart = globalClock.getTime();
        // Choose opacity if the fix cross - to change after a key response
        crossDisappear = 1;
      Begin Routine:
        # Update trial number and add it to outputfile
        prac_trial += 1
        tprac = prac_trial
        thisExp.addData('tprac', tprac)
      Each Frame:
        if practiceKey.keys != undefined:
            crossDisappear = 0
      Each JS Frame:
        // Make fix cross transparent when a key is pressed
        if ((practiceKey.keys !== undefined)) {
            crossDisappear = 0;
        }
      End JS Routine:
        // Catching response and calculating value; > 0 means correct
        if ((practiceKey.keys === "left")) {
            valueDiff = (P1 - P2);
            psychoJS.experiment.addData("pracitem_chosen_name", NameItem1);
        }
        if ((practiceKey.keys === "right")) {
            valueDiff = (P2 - P1);
            psychoJS.experiment.addData("pracitem_chosen_name", NameItem2);
        }
        if ((practiceKey.keys === undefined)) {
            valueDiff = null;
            psychoJS.experiment.addData("practiceKey.keys", NaN);
            psychoJS.experiment.addData("practiceKey.rt", NaN);
            psychoJS.experiment.addData("pracitem_chosen_name", "No_response");
        }
        // Calculating if items are neighbors or not
        value_dist = (P1 - P2);
        value_dist_abs = Math.abs(value_dist);

        // Loop for giving accurate feedback after every trial
        if ((practiceKey.keys === undefined)) {
            msgPractice = "TRY TO RESPOND FASTER";
        } else {
            if (((valueDiff > 0) && (value_dist_abs === 1))) {
                msgPractice = "WIN!";
                durationBlank = 0.5;
            } else {
                if (((valueDiff < 0) && (value_dist_abs === 1))) {
                    msgPractice = "LOSS!";
                    durationBlank = 0.5;
                } else {
                    if ((value_dist_abs > 1)) {
                        msgPractice = "";
                        durationBlank = 0.0;
                    }
                }
            }
        }

        // Loop for saving the real feedback and hits
        if ((valueDiff === null)) {
            acc_practice = 2;
        } else {
            if ((valueDiff > 0)) {
                acc_practice = 1;
            } else {
                if ((valueDiff < 0)) {
                    acc_practice = 0;
                }
            }
        }
        psychoJS.experiment.addData("acc_practice", acc_practice);
        psychoJS.experiment.addData('P1_onsetPrac', routinePracStart + practiceP1.tStart);
        psychoJS.experiment.addData('P2_onsetPrac', routinePracStart + practiceP2.tStart);
      End Routine:
        # Catching response and calculating value; > 0 means correct

        if practiceKey.keys == 'left':
            valueDiff = P1 - P2
        if practiceKey.keys == 'right':
            valueDiff = P2 - P1
        if practiceKey.keys is None:
            valueDiff = None

        # Calculating if items are neighbors or not

        value_dist = P1 - P2
        value_dist_abs = abs(value_dist)

        # Loop for giving accurate feedback after every trial
        # Participant doesn't respond on time
        if practiceKey.keys is None:
            msgPractice = 'TRY TO RESPOND FASTER'

        # Participant responds correctly and items are neighbors
        elif valueDiff > 0 and value_dist_abs == 1:
            msgPractice = 'WIN!'
            durationBlank = 0.5

        # P responds incorrectly
        elif valueDiff < 0 and value_dist_abs == 1:
            msgPractice = 'LOSS!'
            durationBlank = 0.5

        # Items are not neighbors
        elif value_dist_abs > 1:
            msgPractice = ''
            durationBlank = 0.0

        # Loop for saving the real feedback and hits
        if valueDiff is None:
            acc_practice = 2
        elif valueDiff > 0:
            acc_practice = 1
        elif valueDiff < 0:
            acc_practice = 0

        thisExp.addData('acc_practice', acc_practice)
    PolygonComponent crossPractice
      fillColor = $[-1,-1,-1]
      opacity [set every frame] = crossDisappear
      saveStartStop = False
      shape = cross
      size = (20, 20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      units = pix
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  Routine bonus
    CodeComponent bonusCode
      Code Type = Both
      Begin Experiment:
        msgBonus = 'Feedback msg to say if participant gets bonus'
        get_bonus = []
      Begin JS Experiment:
        msgBonus = "Feedback msg to say if participant gets bonus";
        get_bonus = [];
      Begin JS Routine:
        // Select a number of random trials from an array
        function getRandomSubarray(arr, size) {
            var shuffled = arr.slice(0), i = arr.length, temp, index;
            while (i--) {
                index = Math.floor((i + 1) * Math.random());
                temp = shuffled[index];
                shuffled[index] = shuffled[i];
                shuffled[i] = temp;
            }
            return shuffled.slice(0, size);
        }

        // Store 10 random trials in a variable and check their accuracy
        var sampled_accuracies = getRandomSubarray(bonus_accuracies, 10);
        var countBonuses = 0;
        for(var i = 0; i < sampled_accuracies.length; ++i){
            if(sampled_accuracies[i] == 1)
                countBonuses++;
        }

        // Update messages depending on number of accurate responses
        if (countBonuses > 5) {
            msgBonus = "Ten random responses from the main task were selected. \nCONGRATULATIONS! More than half of your responses were correct. \nYou will receive the BONUS! \n[Press space to continue]";
            get_bonus = 1;
            psychoJS.experiment.addData("Bonus", get_bonus);
        } else {
            msgBonus = "Sorry! Unfortunately, at least half of the ten randomly picked responses from the main task were not correct. \nYou cannot not receive the bonus \n[Press space to continue]";
            get_bonus = 0;
            psychoJS.experiment.addData("Bonus", get_bonus);
        }
      Begin Routine:
        # Pick three random number from the accuracy counter
        sampled_accuracies = random.sample(bonus_accuracies, 10)

        # Display bonus message
        if sampled_accuracies.count(1) > 5:
            msgBonus = 'CONGRATULATIONS! The randomly picked responses were correct. You will receive the BONUS!'
            get_bonus = 1
            thisExp.addData('Bonus', get_bonus)
        else:
            msgBonus = 'Sorry! Unfortunately, the randomly picked responses were not correct. You cannot not receive the bonus'
    KeyboardComponent key_resp2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent presentBonus
      color = black
      font = Sans Serif
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $msgBonus
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  Routine PracFeedb_2
    TextComponent practiceFeedback
      color = black
      font = Sans Serif
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $msgPractice
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    CodeComponent onsetFeedbackCode
      Code Type = Both
      Begin JS Routine:
        startFeedb = globalClock.getTime();
      End JS Routine:
        // Store onset of feedbakc during practice
        psychoJS.experiment.addData('onsetFeedbPrac', startFeedb + practiceFeedback.tStart);
    TextComponent screenAfterFB
      font = Calibri
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $durationBlank
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      text:
        Any text

        including line breaks
  Routine practiceBlocks
    CodeComponent codePracStart
      Code Type = Both
      Begin Experiment:
        # Counter for the practice blocks
        practiceBlock = 0

        # Message to be updated before every block
        msgStartPractice = 'message shown before a practice Block'
      Begin JS Experiment:
        // Counter for the practice blocks
        practiceBlock = 0;

        // Message to be updated before every practice block
        msgStartPractice = "message shown before a practice Block";
      Begin JS Routine:
        practiceBlock += 1;

        // For each block choose rows from the excel file that controls the loop
        if ((practiceBlock === 1)) {
            myIndices = "0:8";
            msgStartPractice = "Let's start practicing this task.\nDon't worry about making mistakes, just try to understand the goal for this task.\n[Press space bar to continue]";
        } else {
            myIndices = "8:16";
            msgStartPractice = "This is the second practice block. \nAgain, relax and try to get familiar with the task and the timing, don't worry about mistakes.\n[Press space bar to start]";
        }
      Begin Routine:
        # First time we enter the loop, we are in block 1

        practiceBlock +=1

        # Update message before blocks
        if practiceBlock == 1:
            myIndices = "0:8"
            msgStartPractice = 'Let\'s start practicing this task.\nDon\'t worry about making mistakes, just try to understand the goal for this task.\n[Press space bar to continue]'
        else:
            myIndices = "8:16"
            msgStartPractice = 'This is the second practice block. \nAgain, relax and try to get familiar with the task and the timing, don\'t worry about mistakes.\n[Press space bar to start]'
    KeyboardComponent key_startPrac
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent practiceMessage
      color = black
      font = Sans Serif
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msgStartPractice
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  Routine finishExperiment
    TextComponent finalText
      color = black
      font = Sans Serif
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Great! You finished the second task. Thank you!
        Press space to exit and please wait until you get redirected back to Prolific.
    KeyboardComponent key_respEnd
      allowedKeys = 'space', 'Escape'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine attentionCheck
    KeyboardComponent key_respAC
      allowedKeys = 'up','down','left','right'
      correctAns = $CorrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      store = first key
      storeCorrect = True
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    CodeComponent run_check
      Code Type = Auto->JS
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      Begin Experiment:
        AC_acc = []
        hits_in_attention2 = 0
      End Routine:
        if key_respAC.corr:
            AC_acc = 1
            hits_in_attention2 += 1
        else:
            AC_acc = 0

        thisExp.addData('AC_acc', AC_acc)
    ImageComponent ac_stim
      image [set every repeat] = $Stim
      size = (200, 200)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = pix
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    TextComponent Pos1
      color = black
      font = Sans Serif
      letterHeight = 0.05
      pos = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $Loc1
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    TextComponent Pos2
      color = black
      font = Sans Serif
      letterHeight = 0.05
      pos = (0.3, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $Loc2
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    TextComponent Pos3
      color = black
      font = Sans Serif
      letterHeight = 0.05
      pos = (0, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $Loc3
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    TextComponent Pos4
      color = black
      font = Sans Serif
      letterHeight = 0.05
      pos = (-0.3, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $Loc4
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    TextComponent shapeInstructions
      color = black
      font = Sans Serif
      letterHeight = 0.05
      pos = (0, 0.40)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Use arrows to choose the shape's name
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  Routine attentionCheckPrac
    KeyboardComponent key_respAC_prac
      allowedKeys = 'up','down','left','right'
      correctAns = $CorrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      store = first key
      storeCorrect = True
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    CodeComponent run_check_prac
      Code Type = Auto->JS
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      Begin Experiment:
        # List storing the accuracy as 1 or 0
        AC_acc = []
        hits_in_attention = 0
        abortMsg = ''
      End Routine:
        # Add accuracy to output file
        if key_respAC_prac.corr:
            AC_acc = 1
            hits_in_attention += 1
        else:
            AC_acc = 0

        thisExp.addData('AC_acc', AC_acc)
    ImageComponent ac_stim_prac
      image [set every repeat] = $Stim
      size = (200, 200)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = pix
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    TextComponent Pos1_prac
      color = black
      font = Sans Serif
      letterHeight = 0.05
      pos = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $Loc1
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    TextComponent Pos2_prac
      color = black
      font = Sans Serif
      letterHeight = 0.05
      pos = (0.3, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $Loc2
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    TextComponent Pos3_prac
      color = black
      font = Sans Serif
      letterHeight = 0.05
      pos = (0, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $Loc3
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    TextComponent Pos4_prac
      color = black
      font = Sans Serif
      letterHeight = 0.05
      pos = (-0.3, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $Loc4
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    TextComponent taskAC_prac
      color = black
      font = Sans Serif
      letterHeight = 0.05
      pos = (0, 0.40)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Use arrows to choose the shape's name
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  Routine ContinueOrEnd
    CodeComponent AccuracyCheck
      Code Type = Auto->JS
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      Begin Experiment:
        blockRepetitions = 0
        numberQuits = 0
      Begin Routine:
        #Calculate accuracy in AC and end experiment if acc belor 50%
        check_AC_acc = float(hits_in_attention)/8.0

        if check_AC_acc < 0.50:
            # Skip whole real task
            blockRepetitions = 0
            repsBonus = 0
            abortMsg = 'Your accuracy in the attention checks is too low. \nYou have reached the end of the experiment. \nPress space to quit the experiment. Thank you!'
            numberQuits = 1
        else:
            # Next line tells how many real blocks
            blockRepetitions = 8
            repsBonus = 1
            abortMsg = 'You passed the attention checks. \nYou are about to start the real task. \nHere, both your accuracy and speed matter for the experiment. \n[ Press space bar to START ]'
            numberQuits = 0
    TextComponent messageChecks
      color = black
      font = Sans Serif
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $abortMsg
    KeyboardComponent key_endFail
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine freeResponse
    TextComponent text
      color = black
      font = Sans Serif
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent typingText
      Code Type = Both
      Begin JS Routine:
        // Variables for changing lower to upper case and for updating the text field
        modify = false;
        text.text = '';
      Begin Routine:
        # Code in this part is from https://gitlab.pavlovia.org/demos/textinput/
        text.text = ''
        modify = False
        event.clearEvents('keyboard')
      Each JS Frame:
        let theseKeys = psychoJS.eventManager.getKeys();
        if (theseKeys.length > 0) {  // at least one key was pressed
          textAdd = theseKeys[theseKeys.length-1];
          }


        if (textAdd === 'return') {
            textAdd = '';  // Add nothing
            continueRoutine = false;  // End routine (if that is what you want)
        } else if (textAdd === 'comma') {
            textAdd = ', ';  // Add a comma
        } else if (textAdd === 'space') {
            textAdd = ' ';  // Add a space
        } else if (textAdd === 'period') {
            textAdd = '. ';  // Add a point
        } else if (textAdd === 'backspace') {
            text.text = text.text.slice(0, -1);
            textAdd = undefined;
        } else if (['lshift', 'rshift'].includes(textAdd)) {
            modify = true;
        } else if (textAdd !== undefined) {
            if (modify) {
                text.text = text.text + textAdd.toUpperCase();
                modify = false;
            } else {
                text.text = text.text + textAdd
            }
            textAdd = undefined;
        }
      End JS Routine:
        psychoJS.experiment.addData("comments", text.text);
      End Routine:
        thisExp.addData("comments", subjectText.text)
    TextComponent ask_for_feedb
      color = black
      font = Sans Serif
      letterHeight = 0.05
      pos = (0, 0.40)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Here you can give us feedback. [When ready, press Enter to go to our last message]
  Routine rateItems
    ImageComponent item_to_rate
      image [set every repeat] = $Location
      saveStartStop = False
      size = (300, 300)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent keyNext_2
      allowedKeys = '1','2','3','4','5','6','7','8'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent ratingInstr
      color = black
      font = Sans Serif
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text = Please order the objects according to their position (1 is the worst and 8 is the best). Type a number for every picture.
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  Routine fixation_main
    PolygonComponent fixcross_2
      fillColor = $[-1.000,-1.000,-1.000]
      shape = cross
      size = (20, 20)
      startVal [frame N] = 0
      stopVal [duration (frames)] = $jitter
      units = pix
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    CodeComponent code_2
      Code Type = Both
      Begin JS Experiment:
        //trialtimer = new util.Clock(); //define a beginning of exp timer
      Begin JS Routine:
        // Randomly picked float added to baselone 0.5s fixation cross presentation
        fixTiming = Math.random(0, 0.5);
        jitter = (0.5 + fixTiming);
        routineFixStart = globalClock.getTime();
      Begin Routine:
        # Jitter the timing of fixation cross 0.5 to 1.5 seconds

        jitter = 30 + randint(0, 60)
      End JS Routine:
        // Store onset of the fixation cross in the main task to the output file
        psychoJS.experiment.addData("fixcross_onsetMain", routineFixStart + fixcross_2.tStart);
  Routine instruct_understood
  Routine WelcomeScreen
    TextComponent welcome
      color = black
      font = Calibri
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        Welcome to our online experiment!

        Press space to begin reading the instructions.

        You can switch through instruction slides with left and right keys
    KeyboardComponent startInstructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        images = ['Slide1.jpg', 'Slide2.jpg', 'Slide3.jpg', 'Slide4.jpg', 'Slide5.jpg', 'Slide6.jpg', 'Slide7.jpg', 'Slide8.jpg', 'Slide9.jpg', 'Slide10.jpg', 'Slide11.jpg', 'Slide12.jpg', 'Slide13.jpg']
  Routine disturbance
    TextComponent disturbed
      color = black
      font = Sans Serif
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Were things around you quiet during the last block?

        Press '1' if you were disturbed and '0' if you were NOT disturbed.

        Please do NOT use the NumPad.
    KeyboardComponent keyDisturbed
      allowedKeys = '1', '0'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine quitExperiment
    CodeComponent quitExpCode
      Code Type = Auto->JS
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      Begin Routine:
        core.quit()
  Routine ContinueOrEnd2
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        numberQuits2 = 0
        msgEndExperiment = 'text after attention checks'
      Begin Routine:
        # Force end of loop if subjects fail AC
        check_AC_acc_2 = float(hits_in_attention2)/8.0
        if check_AC_acc_2 < 0.50:
            msgEndExperiment = 'Your accuracy in the attention checks is too low. \nYou have reached the end of the experiment. \nPress the space to quit the experiment. Thank you!'
            numberQuits2 = 1
        else:
            msgEndExperiment = 'You passed the attention checks. \nPress space to see your feedback for the block.'
            numberQuits2 = 0
    TextComponent textEndExperiment
      color = black
      font = Sans Serif
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $msgEndExperiment
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    KeyboardComponent pressToEndExp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine quitExperiment2
    CodeComponent quitExpCode_2
      Code Type = Auto->JS
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      Begin Routine:
        core.quit()
Flow
  LoopInitiator instructionsLoop loopType="TrialHandler"
    loopType = sequential
    nReps = 100
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    Routine instructions
  LoopTerminator instructionsLoop
  LoopInitiator repPractice loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 2
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    Routine practiceBlocks
    LoopInitiator practiceTrials loopType="TrialHandler"
      Selected rows = $myIndices
      conditionsFile = conditions_practice.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('P1', 2), ('P2', 5), ('Block', 1), ('LocItem1', 'html/resources/stimuli_practice_decision/04_beetle.jpg'), ('LocItem2', 'html/resources/stimuli_practice_decision/02_canary.jpg'), ('NameItem1', 'beetle'), ('NameItem2', 'canary')]),
        OrderedDict([('P1', 4), ('P2', 3), ('Block', 1), ('LocItem1', 'html/resources/stimuli_practice_decision/01_rabbit.jpg'), ('LocItem2', 'html/resources/stimuli_practice_decision/07_sock.jpg'), ('NameItem1', 'rabbit'), ('NameItem2', 'sock')]),
        OrderedDict([('P1', 6), ('P2', 2), ('Block', 1), ('LocItem1', 'html/resources/stimuli_practice_decision/06_pullover.jpg'), ('LocItem2', 'html/resources/stimuli_practice_decision/04_beetle.jpg'), ('NameItem1', 'pullover'), ('NameItem2', 'beetle')]),
        OrderedDict([('P1', 7), ('P2', 1), ('Block', 1), ('LocItem1', 'html/resources/stimuli_practice_decision/05_glasses.jpg'), ('LocItem2', 'html/resources/stimuli_practice_decision/08_handmixer.jpg'), ('NameItem1', 'glasses'), ('NameItem2', 'handmixer')]),
        OrderedDict([('P1', 7), ('P2', 6), ('Block', 1), ('LocItem1', 'html/resources/stimuli_practice_decision/05_glasses.jpg'), ('LocItem2', 'html/resources/stimuli_practice_decision/06_pullover.jpg'), ('NameItem1', 'glasses'), ('NameItem2', 'pullover')]),
        OrderedDict([('P1', 4), ('P2', 7), ('Block', 1), ('LocItem1', 'html/resources/stimuli_practice_decision/01_rabbit.jpg'), ('LocItem2', 'html/resources/stimuli_practice_decision/05_glasses.jpg'), ('NameItem1', 'rabbit'), ('NameItem2', 'glasses')])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
      Routine fixation_2
      Routine practice
      Routine PracFeedb_2
    LoopTerminator practiceTrials
    LoopInitiator Attentions loopType="TrialHandler"
      Selected rows = 0:4
      conditionsFile = attentionChecks.xlsx
      loopType = fullRandom
      nReps = 1
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      conditions:
        [OrderedDict([('Stim', 'html/resources/sequences_IDs/circle.png'), ('Loc1', 'circle ↑'), ('Loc2', 'square →'), ('Loc3', 'triangle ↓'), ('Loc4', '← star '), ('CorrAns', 'up')]),
        OrderedDict([('Stim', 'html/resources/sequences_IDs/star.png'), ('Loc1', 'square ↑'), ('Loc2', 'circle →'), ('Loc3', 'star ↓'), ('Loc4', '← triangle'), ('CorrAns', 'down')]),
        OrderedDict([('Stim', 'html/resources/sequences_IDs/square1.png'), ('Loc1', 'star ↑'), ('Loc2', 'triangle →'), ('Loc3', 'circle ↓'), ('Loc4', '← square'), ('CorrAns', 'left')]),
        OrderedDict([('Stim', 'html/resources/sequences_IDs/triangle.png'), ('Loc1', 'star ↑'), ('Loc2', 'square →'), ('Loc3', 'triangle ↓'), ('Loc4', '← circle'), ('CorrAns', 'down')]),
        OrderedDict([('Stim', 'html/resources/sequences_IDs/circle.png'), ('Loc1', 'triangle ↑'), ('Loc2', 'circle →'), ('Loc3', 'star ↓'), ('Loc4', '← square'), ('CorrAns', 'right')]),
        OrderedDict([('Stim', 'html/resources/sequences_IDs/star.png'), ('Loc1', 'triangle ↑'), ('Loc2', 'star →'), ('Loc3', 'square ↓'), ('Loc4', '← circle'), ('CorrAns', 'left')]),
        OrderedDict([('Stim', 'html/resources/sequences_IDs/square1.png'), ('Loc1', 'square ↑'), ('Loc2', 'star →'), ('Loc3', 'circle ↓'), ('Loc4', '← triangle '), ('CorrAns', 'up')]),
        OrderedDict([('Stim', 'html/resources/sequences_IDs/triangle.png'), ('Loc1', 'circle ↑'), ('Loc2', 'triangle →'), ('Loc3', 'square ↓'), ('Loc4', '← star '), ('CorrAns', 'right')])]
      Routine attentionCheckPrac
    LoopTerminator Attentions
    Routine disturbance
  LoopTerminator repPractice
  Routine ContinueOrEnd
  LoopInitiator quitExpLoop loopType="TrialHandler"
    loopType = random
    nReps = numberQuits
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    Routine quitExperiment
  LoopTerminator quitExpLoop
  LoopInitiator repBlocks loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = blockRepetitions
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    Routine LoopControl_2
    LoopInitiator trials loopType="TrialHandler"
      Selected rows = $MyIndicesMain
      conditionsFile = $main_task_blocks
      loopType = sequential
      nReps = 1
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      Routine fixation_main
      Routine trial
      Routine feedback
    LoopTerminator trials
    LoopInitiator trials_AC loopType="TrialHandler"
      conditionsFile = attentionChecks.xlsx
      loopType = fullRandom
      nReps = repsAC
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      conditions:
        [OrderedDict([('Stim', 'html/resources/sequences_IDs/circle.png'), ('Loc1', 'circle ↑'), ('Loc2', 'square →'), ('Loc3', 'triangle ↓'), ('Loc4', '← star '), ('CorrAns', 'up')]),
        OrderedDict([('Stim', 'html/resources/sequences_IDs/star.png'), ('Loc1', 'square ↑'), ('Loc2', 'circle →'), ('Loc3', 'star ↓'), ('Loc4', '← triangle'), ('CorrAns', 'down')]),
        OrderedDict([('Stim', 'html/resources/sequences_IDs/square1.png'), ('Loc1', 'star ↑'), ('Loc2', 'triangle →'), ('Loc3', 'circle ↓'), ('Loc4', '← square'), ('CorrAns', 'left')]),
        OrderedDict([('Stim', 'html/resources/sequences_IDs/triangle.png'), ('Loc1', 'star ↑'), ('Loc2', 'square →'), ('Loc3', 'triangle ↓'), ('Loc4', '← circle'), ('CorrAns', 'down')]),
        OrderedDict([('Stim', 'html/resources/sequences_IDs/circle.png'), ('Loc1', 'triangle ↑'), ('Loc2', 'circle →'), ('Loc3', 'star ↓'), ('Loc4', '← square'), ('CorrAns', 'right')]),
        OrderedDict([('Stim', 'html/resources/sequences_IDs/star.png'), ('Loc1', 'triangle ↑'), ('Loc2', 'star →'), ('Loc3', 'square ↓'), ('Loc4', '← circle'), ('CorrAns', 'left')]),
        OrderedDict([('Stim', 'html/resources/sequences_IDs/square1.png'), ('Loc1', 'square ↑'), ('Loc2', 'star →'), ('Loc3', 'circle ↓'), ('Loc4', '← triangle '), ('CorrAns', 'up')]),
        OrderedDict([('Stim', 'html/resources/sequences_IDs/triangle.png'), ('Loc1', 'circle ↑'), ('Loc2', 'triangle →'), ('Loc3', 'square ↓'), ('Loc4', '← star '), ('CorrAns', 'right')])]
      Routine attentionCheck
    LoopTerminator trials_AC
    LoopInitiator presentACresults loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = numberACresults
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      Routine ContinueOrEnd2
    LoopTerminator presentACresults
    LoopInitiator quitExpLoop2 loopType="TrialHandler"
      loopType = random
      nReps = numberQuits2
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      Routine quitExperiment2
    LoopTerminator quitExpLoop2
    Routine BlockFeedback
    Routine disturbance
  LoopTerminator repBlocks
  LoopInitiator BonusLoop loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = repsBonus
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    Routine bonus
  LoopTerminator BonusLoop
  Routine freeResponse
  Routine finishExperiment
